WorkflowBuilder(Version=2.9.0)
GroupWorkflow IncludedWorkflows
    Disable IncludeWorkflow(Path=UclOpen.Devices:LicketySplit.bonsai, CommandsSubjectName=LickCommands, EventsSubjectName=LickEvents, LickStateSubjectName=LickState)

    IncludeWorkflow
      Path=UclOpen.Devices:DeviceBehaviorBoard.BehaviorBoard.bonsai
      CommandsSubjectName=BehaviorCommands
      PortName=COM11
      DumpRegisters=true
      Heartbeat=Disabled
      EventsSubjectName=BehaviorEvents

    GroupWorkflow RunningWheel
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #0
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderModePayload(EncoderMode=Position)) => #1
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #2
        #0, #1, #2 -> Merge => #3
        ExternalizedMapping => #4
          Name(DisplayName=CommandsSubjectName, Description="The name of the Subject that carries command messages for a specific behavior device", Category=Subjects)
        #3, #4 -> MulticastSubject BehaviorCommands => #5
        ExternalizedMapping => #6
          Name(DisplayName=EventsSubjectName, Description="The name of the Subject that carries event messages from a specific behavior device", Category=Subjects)
        -> SubscribeSubject BehaviorEvents => #7
        #5, #7 -> SubscribeWhen
        #6 -> SubscribeSubject BehaviorEvents
        -> DelaySubscription(DueTime=PT0.5S)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
        -> MemberSelector(Selector=Encoder)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertSigned
          Expression: it > 32768.0 ? it - 65536.0 : (it < -32768.0 ? it + 65536.0 : it)
        -> Accumulate => #15
        ExternalizedMapping(CountsPerRev, WheelDiameterMm) => #16
        #15, #16 -> GroupWorkflow TicksToCentimeters(Description="Converts steps on a quadrature encoder to a distance in cm, published to a Subject") => #17
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=CountsPerRev, Description="The number of steps recorded on the quadrature encoder in a full revolution", Category="Running Wheel")) => #1
            Source2=#0, Source3=#1 -> Divide(Operand=WorkflowProperty<System.Int16>(Value=4096)) => #2
            ExternalizedMapping(Value(DisplayName=WheelDiameterMm, Description="The diameter of the wheel, in millimetres", Category="Running Wheel"))
            -> IntProperty(Value=75)
            -> Bonsai.Scripting.Expressions.ExpressionTransform CircumferenceCm
              Expression: (it*Math.Pi)/10
            -> PropertyMapping(Value) => #6
            #2, #6 -> Multiply(Operand=FloatProperty(Value=23.561945))
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=WheelDistanceSubjectName, Description="The name of the Subject that carries the wheel distance in cm", Category=Subjects)) => #18
        #17, #18 -> PublishSubject WheelDistanceCm

    IncludeWorkflow(Path=UclOpen.Devices:DeviceBehaviorBoard.Timestamps.bonsai, EventsSubjectName=BehaviorEvents, CommandsSubjectName=BehaviorCommands)

    Disable IncludeWorkflow
      Path=UclOpen.Devices:DeviceBehaviorBoard.RunningWheel.bonsai
      CommandsSubjectName=BehaviorCommands
      EventsSubjectName=BehaviorEvents
      CountsPerRev=4096
      WheelDiameterMm=170
      WheelDistanceSubjectName=WheelDistanceCm

GroupWorkflow Params(Description=Params)
    ExternalizedMapping(Path(DisplayName=TaskPath))
    -> Bonsai.IO.ReadAllText(Path=C:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\session-schemas\current-session\UclOpenAuditoryVrCorridorTaskLogic.json)
    -> UclOpenAuditoryVrCorridorDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenAuditoryVrCorridorDataSchema.UclOpenAuditoryVrCorridorTaskLogic>)
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskParams

    GroupWorkflow VisParams
        SubscribeSubject TaskParams => #0
        -> MemberSelector(Selector=StartFreq) => #1
        #0 -> MemberSelector(Selector=EndFreq) => #2
        #1, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #4
          Expression: it.item2/it.Item1
        SubscribeSubject StartFreqV => #5
        SubscribeSubject EndFreqV => #6
        #5, #6 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #8
          Expression: it.item2/it.Item1
        #4, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Aud-Over-Vis-Multiple
          Expression: it.item1/it.Item2
        -> BehaviorSubject VisToAudMultiple

        Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=On
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Normal
          DisplayDevice=Primary
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=2
          ExtentY=2
          LocationX=0
          LocationY=0
          Layer=0
          Angle=90
          ColorR=0.5
          ColorG=0.5
          ColorB=0.5
          ColorA=1

        DoubleProperty(Value=4)
        -> BehaviorSubject StartFreqV

        DoubleProperty(Value=16)
        -> BehaviorSubject EndFreqV

        DoubleProperty(Value=0)
        -> BehaviorSubject CurrPhase

        DoubleProperty(Value=0)
        -> BehaviorSubject CurrFreqV

        DoubleProperty(Value=1)
        -> BehaviorSubject Opacity

        DoubleProperty(Value=1)
        -> BehaviorSubject CurrOpacity

    GroupWorkflow InitVars
        BehaviorSubject<System.TimeSpan> InterTrialInterval
        BehaviorSubject<System.Int64> BeepTimer
        BehaviorSubject<System.Double> TrackLength
        BehaviorSubject<System.Double> RewardFloorFreq
        BehaviorSubject<System.Double> RewardCeilFreq
        BehaviorSubject<System.Double> TrialEndFreq
        BehaviorSubject<System.Boolean> TrialEnded

        Bonsai.Dsp.MatrixReader(Path=./waveforms/all_waveforms.bin, Offset=0, SampleRate=50000, ChannelCount=1, BufferLength=2500, Depth=F32, Layout=RowMajor)
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear) => #8
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=NFreqBins)
        -> PropertyMapping(Count) => #11
        #8, #11 -> Take(Count=100)
        -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
        -> ToList
        -> AsyncSubject WaveformDict

        IntProperty(Value=0) => #16
        -> BehaviorSubject LickCount
        #16 -> BehaviorSubject TrialNumber
        #16 -> BehaviorSubject CurrFreq

        BooleanProperty(Value=false)
        -> BehaviorSubject WasRewarded

        DoubleProperty(Value=0)
        -> BehaviorSubject StartTime

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialStartWheelDistance

        DoubleProperty(Value=0)
        -> BehaviorSubject CurrAmp

        DoubleProperty(Value=1000)
        -> BehaviorSubject DriftBeepsTillEnd

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialDistFloor

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ShapingStage)
    -> BehaviorSubject ShapingStage

    Disable ExternalizedMapping(Value(DisplayName=ShapingStage))
    -> Disable IntProperty(Value=6)
    -> Disable BehaviorSubject ShapingStage

    Disable GroupWorkflow Old
        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage1.Floor)
        -> Disable BehaviorSubject Stage1FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage1.Ceiling)
        -> Disable BehaviorSubject Stage1CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage2.Floor)
        -> Disable BehaviorSubject Stage2FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage2.Ceiling)
        -> Disable BehaviorSubject Stage2CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage3.Floor)
        -> Disable BehaviorSubject Stage3FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage3.Ceiling)
        -> Disable BehaviorSubject Stage3CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Amplitude)
        -> Disable BehaviorSubject Amplitude

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.TimeoutSec)
        -> Disable BehaviorSubject PunishmentTimeoutSec

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage4.Floor)
        -> Disable BehaviorSubject Stage4FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage4.Ceiling)
        -> Disable BehaviorSubject Stage4CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=NFreqBins)
        -> Disable BehaviorSubject NFreqBins

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage5.Floor)
        -> Disable BehaviorSubject Stage5FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=QuantizeBinSize)
        -> Disable BehaviorSubject QuantizeBinSize

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=StartFreq)
        -> Disable BehaviorSubject StartFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=EndFreq)
        -> Disable BehaviorSubject EndFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage5.Ceiling)
        -> Disable BehaviorSubject Stage5CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage6.Floor)
        -> Disable BehaviorSubject Stage6FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage6.Ceiling)
        -> Disable BehaviorSubject Stage6CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage4PunishedLick)
        -> Disable BehaviorSubject Stage4PunishedLick

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage5PunishedLick)
        -> Disable BehaviorSubject Stage5PunishedLick

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage6PunishedLick)
        -> Disable BehaviorSubject Stage6PunishedLick

GroupWorkflow ComputeRewardZone
    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.ShapingStage == 1 ? Convert.ToDouble(it.ThresholdFrequencies.Stage1.Floor) : it.ShapingStage == 2 ? Convert.ToDouble(it.ThresholdFrequencies.Stage2.Floor) : it.ShapingStage == 3 ? Convert.ToDouble(it.ThresholdFrequencies.Stage3.Floor) : it.ShapingStage == 4 ? Convert.ToDouble(it.ThresholdFrequencies.Stage4.Floor) :  it.ShapingStage == 5 ? Convert.ToDouble(it.ThresholdFrequencies.Stage5.Floor) : Convert.ToDouble(it.ThresholdFrequencies.Stage6.Floor)
    -> MulticastSubject RewardFloorFreq

    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.ShapingStage == 1 ? Convert.ToDouble(it.ThresholdFrequencies.Stage1.Ceiling) : it.ShapingStage == 2 ? Convert.ToDouble(it.ThresholdFrequencies.Stage2.Ceiling) : it.ShapingStage == 3 ? Convert.ToDouble(it.ThresholdFrequencies.Stage3.Ceiling) : it.ShapingStage == 4 ? Convert.ToDouble(it.ThresholdFrequencies.Stage4.Ceiling) :  it.ShapingStage == 5 ? Convert.ToDouble(it.ThresholdFrequencies.Stage5.Ceiling) : Convert.ToDouble(it.ThresholdFrequencies.Stage6.Ceiling)
    -> MulticastSubject RewardCeilFreq

GroupWorkflow LickCounter(Description="Increments lick count on each lick")
    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false) => #0
    SubscribeSubject LickCount => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject LickCount
    -> WorkflowOutput

GroupWorkflow TaskState
    Timer(DueTime=PT0S, Period=PT0.25S) => #0
    SubscribeSubject ShapingStage => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject TrialNumber => #3
    #2, #3 -> WithLatestFrom => #4
    SubscribeSubject InterTrialInterval => #5
    #4, #5 -> WithLatestFrom => #6
    SubscribeSubject WheelDistanceCm => #7
    #6, #7 -> WithLatestFrom => #8
    SubscribeSubject TrialDistance => #9
    #8, #9 -> WithLatestFrom => #10
    SubscribeSubject MouseVirtualPosition => #11
    #10, #11 -> WithLatestFrom => #12
    SubscribeSubject CurrFreq => #13
    #12, #13 -> WithLatestFrom => #14
    SubscribeSubject TrackLength => #15
    #14, #15 -> WithLatestFrom => #16
    SubscribeSubject RewardFloorFreq => #17
    #16, #17 -> WithLatestFrom => #18
    SubscribeSubject RewardCeilFreq => #19
    #18, #19 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        "Stage:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " Trial:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " ITI:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.TotalSeconds.ToString("F0") + "s" + " TotDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " TrialDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " Position:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " Freq:" + Convert.ToInt32(it.Item1.Item1.Item1.Item2).ToString() + "Hz" +
        " Track:" + Convert.ToInt32(it.Item1.Item1.Item2).ToString() + "cm" +
        " Zone:" + Convert.ToInt32(it.Item1.Item2).ToString() + "-" + Convert.ToInt32(it.Item2).ToString() + "Hz"
    -> WorkflowOutput

GroupWorkflow Logging
    GroupWorkflow TrialLogger
        SubscribeSubject TrialEnded
        -> Condition IsTrialEnded?
            WorkflowInput Source1
            -> WorkflowOutput
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Format(Format={0:F2}, Selector="") => #4
        SubscribeSubject TrialNumber => #5
        #4, #5 -> WithLatestFrom => #6
        SubscribeSubject ShapingStage => #7
        #6, #7 -> WithLatestFrom => #8
        SubscribeSubject RewardFloorFreq => #9
        #8, #9 -> WithLatestFrom => #10
        SubscribeSubject RewardCeilFreq => #11
        #10, #11 -> WithLatestFrom => #12
        SubscribeSubject TrialEndFreq => #13
        #12, #13 -> WithLatestFrom => #14
        SubscribeSubject TrackLength => #15
        #14, #15 -> WithLatestFrom => #16
        SubscribeSubject TrialDistance => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject LickCount => #19
        #18, #19 -> WithLatestFrom => #20
        SubscribeSubject WasRewarded => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #23
          Expression:
            new
            (
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as ShapingStage,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqFloor,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqCeil,
            it.Item1.Item1.Item1.Item1.Item2 as TrialEndFreq,
            it.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item2 as TrialEndPosCm,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=TrialLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #26
        #23, #26 -> Bonsai.IO.CsvWriter
          FileName: c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-two_date-2026-05-07T13-21-35\TrialLog_two_Algernon_\TrialLog_two_Algernon_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true

    GroupWorkflow TaskSchemaLogger
        SubscribeSubject TaskParams
        -> UclOpenAuditoryVrCorridorDataSchema.SerializeToJson(Formatting=None)
        -> Delay(DueTime=PT1S)
        -> GroupWorkflow TaskSchemaLog
            Disable WorkflowInput Source2 => #0
            Disable ExternalizedMapping(Name)
            -> Disable GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> Disable PropertyMapping(Path) => #3
            #0, #3 -> Disable UclOpen.Logging.JsonWriter
              Path: c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs\sub-r2d2\ses-newest_date-2026-03-05T17-50-13\TaskSchemaLog_newest_r2d2_\TaskSchemaLog_newest_r2d2_.json
              Suffix=Timestamp
              Overwrite=false
            -> Disable WorkflowOutput

            ExternalizedMapping(Name)
            -> GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #8
            WorkflowInput Source1 => #9
            #8, #9 -> UclOpen.Loggingv2.JsonWriter
              Path: c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-two_date-2026-05-07T13-21-35\TaskSchemaLog_two_Algernon_\TaskSchemaLog_two_Algernon_.json
              Suffix=None
              Overwrite=false
            -> WorkflowOutput

    GroupWorkflow LogParams
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.LoggingRootPath)
        -> BehaviorSubject LoggingRootPath

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.AnimalId)
        -> BehaviorSubject AnimalID

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.SessionId)
        -> BehaviorSubject SessionID

        SubscribeSubject SessionID => #9
        SubscribeSubject AnimalID => #10
        #9, #10 -> Zip
        -> Format(Format={0}_{1}, Selector="Item1,Item2")
        -> BehaviorSubject AnimalAndSessionID

    GroupWorkflow IntervalLogger
        SubscribeSubject WheelDistanceCm
        -> DistinctUntilChanged => #1
        SubscribeSubject LickCount
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #4
        SubscribeSubject CurrFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #7
        SubscribeSubject CurrAmp
        -> DistinctUntilChanged => #9
        #1, #4, #7, #9 -> Merge
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #12
        SubscribeSubject StartTime => #13
        #12, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform ElapsedMs
          Expression: it.Item1 - it.Item2
        -> Format(Format={0:F2}, Selector="") => #16
        SubscribeSubject TrialNumber => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject WheelDistanceCm => #19
        #18, #19 -> WithLatestFrom => #20
        SubscribeSubject TrialDistance => #21
        #20, #21 -> WithLatestFrom => #22
        SubscribeSubject MouseVirtualPosition => #23
        #22, #23 -> WithLatestFrom => #24
        SubscribeSubject TrackLength => #25
        #24, #25 -> WithLatestFrom => #26
        SubscribeSubject CurrFreq => #27
        #26, #27 -> WithLatestFrom => #28
        SubscribeSubject CurrAmp => #29
        #28, #29 -> WithLatestFrom => #30
        SubscribeSubject LickCount => #31
        #30, #31 -> WithLatestFrom => #32
        SubscribeSubject WasRewarded => #33
        #32, #33 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #35
          Expression:
            new
            (
            Convert.ToInt32(Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1)) as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TotalDistance,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrialDistance,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as MousePosition,
            it.Item1.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item1.Item2 as CurrFreq,
            it.Item1.Item1.Item2 as CurrAmp,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=IntervalLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #38
        #35, #38 -> Bonsai.IO.CsvWriter
          FileName: c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-two_date-2026-05-07T13-21-35\IntervalLog_two_Algernon_\IntervalLog_two_Algernon_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true
        -> WorkflowOutput
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Path) => #6
    SubscribeSubject SessionID
    -> PropertyMapping(SessionId) => #8
    SubscribeSubject AnimalID
    -> PropertyMapping(SubjectId) => #10
    #6, #8, #10 -> IncludeWorkflow
      Path=UclOpen.Logging:LogController.bonsai
      SubjectId=Algernon
      SessionId=two
      Path=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=Behavior)

    Disable ExternalizedMapping(Name, Extension)
    -> Disable GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
        SubscribeSubject PathPrefix => #0
        WorkflowInput Source1 => #1
        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
        #1, #2 -> StringProperty(Value=IntervalLog) => #3
        SubscribeSubject AnimalAndSessionID => #4
        #3, #4 -> Zip
        -> Format(Format={0}_{1}_, Selector="Item1, Item2")
        -> Take(Count=1) => #7
        -> UclOpen.Core.StripSubstring => #8
        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
        -> StringProperty(Value=csv)
        -> Take(Count=1) => #11
        #0, #8, #7, #11 -> Zip
        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
        -> WorkflowOutput

GroupWorkflow InitMixer
    Bonsai.Mixer.CreateMixerContext(HostApi="Windows DirectSound", DeviceName="Speakers (3- XMOS xCORE-200 MC (UAC2.0))", SampleRate=50000, SuggestedLatency=nil)
    -> Bonsai.Mixer.StartMixer
    -> BehaviorSubject Mixer

    SubscribeSubject Buffer => #3
    SubscribeSubject Mixer
    -> PropertyMapping(Mixer) => #5
    #3, #5 -> Bonsai.Mixer.QueueBuffer

Defer BeepTimer => #7
    ExternalizedMapping(Period)
    -> Timer(DueTime=PT0S, Period=PT0.05S) => #1
    ExternalizedMapping(RangeMin, RangeMax, Count)
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=1, RangeMax=2)
    -> Bonsai.Numerics.Permutation
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> MulticastSubject InterTrialInterval
    -> SelectMany InitITI => #8
        WorkflowInput Source1
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S)
        -> SelectMany WaitForQuiescence
            SubscribeSubject WheelDistanceCm
            -> Bonsai.Scripting.Expressions.ExpressionTransform BinDist
              Expression: Math.Floor(it / 0.1)
            -> DistinctUntilChanged => #2
            DoubleProperty(Value=0) => #3
            #2, #3 -> Merge
            -> Throttle(DueTime=PT0.5S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #9
    #1, #9 -> SubscribeWhen
    -> MulticastSubject BeepTimer
    -> WorkflowOutput
    #8 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Take(Count=1)
    -> MulticastSubject StartTime
    SubscribeSubject WheelDistanceCm => #17
    #8, #17 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Take(Count=1)
    -> MulticastSubject TrialStartWheelDistance
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 0.0
    -> MulticastSubject TrialDistFloor
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: false
    -> MulticastSubject TrialEnded

    SubscribeSubject TrialNumber
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNumber

    IntProperty(Value=0)
    -> MulticastSubject CurrFreq

    BooleanProperty(Value=false)
    -> MulticastSubject WasRewarded

    IntProperty(Value=0)
    -> MulticastSubject LickCount

    DoubleProperty(Value=0)
    -> MulticastSubject CurrFreqV

    DoubleProperty(Value=0)
    -> MulticastSubject TrialDistFloor

    SubscribeSubject WheelDistanceCm
    -> Take(Count=1)
    -> MulticastSubject TrialStartWheelDistance
SubscribeSubject WaveformDict => #8
#7, #8 -> SubscribeWhen => #9
SubscribeSubject MouseVirtualPosition => #10
#9, #10 -> WithLatestFrom
-> Skip(Count=1)
-> MemberSelector(Selector=Item2) => #13
SubscribeSubject TaskParams => #14
-> MemberSelector(Selector=QuantizeBinSize) => #15
#13, #15 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "Quantize Wheel Distance" => #17
  Expression: Math.Round(it.Item1/it.Item2) * it.Item2
Defer "Random Track Length" => #18
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=6, RangeMin=20, RangeMax=120)
    -> Bonsai.Numerics.Permutation
    -> Take(Count=1)
    -> MulticastSubject TrackLength
    -> WorkflowOutput
#14 -> MemberSelector(Selector=StartFreq) => #19
#14 -> MemberSelector(Selector=EndFreq) => #20
#18, #19, #20 -> Zip => #21
#17, #21 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "cm to Hz" => #23
  Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
-> Condition IsTrial1
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
-> GroupWorkflow AddFreqDriftA => #25
    WorkflowInput Source1 => #0
    SubscribeSubject TaskParams => #1
    -> MemberSelector(Selector=StartFreq) => #2
    -> PropertyMapping(Value) => #3
    #0, #3 -> Subtract(Operand=DoubleProperty(Value=2000))
    -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #5
      Expression: it
    SubscribeSubject BeepTimer => #6
    #1 -> MemberSelector(Selector=EndFreq) => #7
    SubscribeSubject DriftBeepsTillEnd => #8
    #2, #7, #8 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #10
      Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
    #6, #10 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #12
      Expression: Math.Pow(it.Item2, it.Item1)
    SubscribeSubject TaskParams
    -> MemberSelector(Selector=StartFreq) => #14
    #12, #14 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
      Expression: it.item2 * it.Item1
    -> PropertyMapping(Value) => #17
    #5, #17 -> Add(Operand=DoubleProperty(Value=2470.3608813864007))
    -> WorkflowOutput
#23 -> Condition IsNotTrial1 => #26
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> NotEqual(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
#25, #26 -> Merge
-> MulticastSubject CurrFreq => #28
GroupWorkflow AmplitudeOnOff => #29
    SubscribeSubject BeepTimer
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Alternate On Off" => #1
      Expression: (it % 2 == 0) ? 0.0 : 1.0
    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Amplitude)
    -> PropertyMapping(Value) => #4
    #1, #4 -> Multiply(Operand=DoubleProperty(Value=0.5))
    -> MulticastSubject CurrAmp
    -> WorkflowOutput
#28, #29 -> Zip
-> CreateObservable MakeSoundwave
    WorkflowInput Source1 => #0
    SubscribeSubject TaskParams => #1
    -> MemberSelector(Selector=StartFreq) => #2
    #1 -> MemberSelector(Selector=EndFreq) => #3
    #1 -> MemberSelector(Selector=NFreqBins) => #4
    #0, #2, #3, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetPercentProgress => #6
      Expression: Convert.ToInt32(Math.Max(0.0, Math.Min(Convert.ToDouble(it.Item4) - 1.0, Convert.ToDouble(it.Item1.Item1) <= 0.0 ? 0.0 : Math.Round(Math.Log(Convert.ToDouble(it.Item1.Item1) / Convert.ToDouble(it.Item2)) / Math.Log(Convert.ToDouble(it.Item3) / Convert.ToDouble(it.Item2)) * (Convert.ToDouble(it.Item4) - 1.0)))))
    SubscribeSubject WaveformDict => #7
    #6, #7 -> WithLatestFrom
    -> InputMapping(Selector=Item2, Value(Selector=Item1))
    -> Index(Operand=IntProperty(Value=84))
    -> WorkflowOutput
-> Switch
-> PublishSubject Buffer => #33
GroupWorkflow IsTrialEnd(Description="Determines trial end based on shaping stage") => #34
    SubscribeSubject ShapingStage => #0
    SubscribeSubject CurrFreq => #1
    SubscribeSubject RewardFloorFreq => #2
    #1, #2 -> WithLatestFrom
    -> Condition WaitForReset
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 < it.Item2
        -> WorkflowOutput
    -> Take(Count=1) => #5
    #0, #5 -> SubscribeWhen
    -> Take(Count=1) => #7
    -> Condition IsStage1or2
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
          Expression: ((it >= 1) && (it <= 2))
        -> WorkflowOutput
    -> SelectMany FreqInRewZone => #9
        SubscribeSubject CurrFreq => #0
        SubscribeSubject RewardFloorFreq => #1
        #0, #1 -> WithLatestFrom
        -> Condition FreqAboveThreshold
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 >= it.Item2
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Disable SubscribeSubject CurrFreq => #7
        Disable SubscribeSubject CurrFreq => #8
        Disable SubscribeSubject RewardFloorFreq => #9
        #8, #9 -> Disable WithLatestFrom
        -> Disable Condition WaitForReset
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1) => #12
        #7, #12 -> Disable SubscribeWhen => #13
        Disable SubscribeSubject RewardFloorFreq => #14
        #13, #14 -> Disable WithLatestFrom
        -> Disable Condition FreqAboveThreshold
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 >= it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1)
        -> Disable BooleanProperty(Value=true)
        -> Disable WorkflowOutput
    #7 -> Condition IsStage3
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> SelectMany LickDetected
        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Condition LickOnTarget => #12
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: (it.Item1 >= it.Item2)
        -> WorkflowOutput
    #7 -> Condition IsStage4or5or6
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
          Expression: ((it >= 4) && (it <= 6))
        -> WorkflowOutput
    -> SelectMany LickDetected => #14
        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Condition LickOnTarget => #15
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        SubscribeSubject RewardCeilFreq => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
        -> WorkflowOutput
    #14 -> Condition LickOffTarget
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        SubscribeSubject RewardCeilFreq => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
          Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
        -> WorkflowOutput
    -> Condition WrongLicksAboveLimit => #17
        SubscribeSubject LickCount => #0
        SubscribeSubject TaskParams
        -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #2
          Expression: it.ShapingStage == 4 ? Convert.ToDouble(it.Punishment.Stage4PunishedLick) : it.ShapingStage == 5 ? Convert.ToDouble(it.Punishment.Stage5PunishedLick) : it.ShapingStage == 6 ? Convert.ToDouble(it.Punishment.Stage6PunishedLick) : Convert.ToDouble(1000)
        #0, #2 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
          Expression: (it.Item1 >= it.Item2)
        -> WorkflowOutput

        Disable SubscribeSubject LickCount => #6
        Disable SubscribeSubject TaskParams => #7
        Disable SubscribeSubject ShapingStage => #8
        #7, #8 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #10
          Expression: it.Item2 == 4 ? Convert.ToDouble(it.Item1.Punishment.Stage4PunishedLick) : it.Item2 == 5 ? Convert.ToDouble(it.Item1.Punishment.Stage5PunishedLick) : it.Item2 == 6 ? Convert.ToDouble(it.Item1.Punishment.Stage6PunishedLick) : Convert.ToDouble(1000)
        #6, #10 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
          Expression: (it.Item1 >= it.Item2)
        -> Disable WorkflowOutput
    #9, #12, #15, #17 -> Merge
    -> WorkflowOutput
#33, #34 -> TakeUntil => #35
SubscribeSubject StartFreqV => #36
SubscribeSubject EndFreqV => #37
#18, #36, #37 -> Zip => #38
#17, #38 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "cm to SpatFreq" => #40
  Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
-> Condition IsTrial1
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
-> GroupWorkflow AddFreqDriftV => #42
    WorkflowInput Source1 => #0
    SubscribeSubject StartFreqV => #1
    -> PropertyMapping(Value) => #2
    #0, #2 -> Subtract(Operand=DoubleProperty(Value=4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #4
      Expression: it
    SubscribeSubject BeepTimer => #5
    SubscribeSubject EndFreqV => #6
    SubscribeSubject DriftBeepsTillEnd => #7
    #1, #6, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #9
      Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
    #5, #9 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #11
      Expression: Math.Pow(it.Item2, it.Item1)
    SubscribeSubject StartFreqV => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
      Expression: it.item2 * it.Item1
    -> PropertyMapping(Value) => #15
    #4, #15 -> Add(Operand=DoubleProperty(Value=4.5002339387552563))
    -> WorkflowOutput
#40 -> Condition IsNotTrial1 => #43
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> NotEqual(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
#42, #43 -> Merge
-> MulticastSubject CurrFreqV => #45
SubscribeSubject BeepTimer => #46
-> GroupWorkflow OpacityOnOff => #47
    WorkflowInput Source1
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Alternate On Off" => #1
      Expression: (it % 2 == 0) ? 0.0 : 1.0
    SubscribeSubject Opacity
    -> PropertyMapping(Value) => #3
    #1, #3 -> Multiply(Operand=DoubleProperty(Value=1))
    -> MulticastSubject CurrOpacity
    -> WorkflowOutput
#46 -> GroupWorkflow RandomisePhase => #48
    WorkflowInput Source1
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.Sample
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (it*360)-180
    -> MulticastSubject CurrPhase
    -> WorkflowOutput
#45, #47, #48 -> Zip
-> CreateObservable MakeGrating
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject settingsV

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #4
    SubscribeSubject settingsV => #5
    -> MemberSelector(Selector=Item1)
    -> PropertyMapping(SpatialFrequency) => #7
    #5 -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Opacity) => #9
    #5 -> MemberSelector(Selector=Item3)
    -> PropertyMapping(Phase) => #11
    #4, #7, #9, #11 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=0
      LocationY=0
      Layer=1
      ExtentX=2
      ExtentY=2
      SpatialFrequency=13.1470451
      TemporalFrequency=0
      Phase=-4337.225
      Angle=90
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1
      Aperture=1
      Opacity=0
    -> WorkflowOutput
-> Switch => #51
#51, #34 -> TakeUntil => #52
#35, #52 -> Zip
-> MemberSelector(Selector=Item1)
-> GroupWorkflow ProcessTrialEnd
    WorkflowInput Source1
    -> TakeLast(Count=1) => #1
    SubscribeSubject CurrFreq => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject TrialEndFreq => #5
    SubscribeSubject RewardFloorFreq => #6
    SubscribeSubject RewardCeilFreq => #7
    #6, #7 -> Zip => #8
    #5, #8 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
      Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
    -> BehaviorSubject WasOnTarget => #11
    -> Condition OnTarget
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany RewardTone => #13
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=Amplitude) => #1
        -> PropertyMapping(Amplitude)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=6000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
        -> Take(Count=25) => #5
        #1 -> PropertyMapping(Amplitude)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=9000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
        -> Take(Count=25) => #9
        #5, #9 -> Concat
        -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1) => #11
        SubscribeSubject Mixer
        -> PropertyMapping(Mixer) => #13
        #11, #13 -> Bonsai.Mixer.QueueBuffer
        -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
        -> TakeLast(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    SubscribeSubject ShapingStage => #14
    #11 -> Condition OffTarget => #15
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #14, #15 -> SubscribeWhen
    -> Take(Count=1) => #17
    -> Condition IsStage4or5or6
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
          Expression: ((it >= 4) && (it <= 6))
        -> WorkflowOutput
    -> SelectMany PunishmentToneAndTimeout => #19
        SubscribeSubject Mixer
        -> PropertyMapping(Mixer) => #1
        Bonsai.Audio.AudioReader(FileName=waveforms\error_tone.wav, BufferLength=0, SampleRate=0) => #2
        DoubleProperty(Value=32767)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "S16 to F32"
          Expression: 1/it
        -> PropertyMapping(Scale) => #5
        #2, #5 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
        -> Take(Count=1) => #7
        #1, #7 -> Bonsai.Mixer.QueueBuffer
        -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
        -> TakeLast(Count=1) => #10
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=Punishment.TimeoutSec)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT5S) => #15
        #10, #15 -> Zip
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    #17 -> Condition IsNotStage4or5or6?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsNot4or5or6
          Expression: (it < 4)
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #21
    Source1=#13, Source3=#19, Source4=#21 -> Merge
    -> MulticastSubject WasRewarded
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnded
    -> WorkflowOutput
-> Repeat

SubscribeSubject WheelDistanceCm => #57
SubscribeSubject TrialStartWheelDistance => #58
#57, #58 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform TrialDistance
  Expression: it.Item1 - it.Item2
-> PublishSubject TrialDistance

SubscribeSubject TrialDistance => #62
SubscribeSubject TrialDistFloor => #63
#62, #63 -> WithLatestFrom => #64
SubscribeSubject TrackLength => #65
#64, #65 -> WithLatestFrom => #66
SubscribeSubject TrialEnded => #67
#66, #67 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform CalcVirtualPos => #69
  Description="Prevent pos < 0cm or >TrackLengthcm. Gate on TrialEnded to prevent stale feedback."
  Expression:
    new (
    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1) as Floor,
    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min((it.Item1.Item1.Item1 - Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1)), it.Item1.Item2) as VirtualPos
    )
-> MemberSelector(Selector=Floor)
-> MulticastSubject TrialDistFloor
#69 -> MemberSelector(Selector=VirtualPos)
-> PublishSubject MouseVirtualPosition
